#  Example Qudi configuration file.
#
#
#
# IMPORTANT: The format of every 'module.Class' line has changed on 28.6.2015.
# =========  The class name now needs to be explicitly given here in the config.
#		  the config line must the form package.module.Class.ClassName

global:
    # list of modules to load when starting
    startup: ['man', 'tray']

    ## For controlling the appearance of the GUI:
    stylesheet: 'qdark.qss'

hardware:
    fhr1000spectrometer:
        module.Class: 'spectrometer.fhr1000_spectrometer.Fhr1000'
        com_port_fhr1000: 'ASRL1::INSTR'
        autocalibrate_at_start: False
        grating: 1200

logic:
    fhrlogic:
        module.Class: 'fhr1000_logic.Fhr1000Logic'
        connect:
            hardware: 'fhr1000spectrometer'

gui:
    tray:
        module.Class: 'trayicon.TrayIcon'

    man:
        module.Class: 'manager.managergui.ManagerGui'

    fhr1000gui:
        module.Class: 'spectrometer.fhr1000_gui.Fhr1000Gui'
        connect:
            fhrconnectlogic: 'fhrlogic'