#  Example Qudi configuration file.
#
#
#
# IMPORTANT: The format of every 'module.Class' line has changed on 28.6.2015.
# =========  The class name now needs to be explicitly given here in the config.
#		  the config line must the form package.module.Class.ClassName

global:
    # list of modules to load when starting
    startup: ['man', 'tray']

    ## For controlling the appearance of the GUI:
    stylesheet: 'qdark.qss'

hardware:
    hr640spectrometer:
        module.Class: 'spectrometer.hr640_spectrometer.Hr640'

logic:
    hrlogic:
        module.Class: 'hr640_logic.Hr640Logic'
        connect:
            hardware: 'hr640spectrometer'

gui:
    tray:
        module.Class: 'trayicon.TrayIcon'

    man:
        module.Class: 'manager.managergui.ManagerGui'

    hr640gui:
        module.Class: 'spectrometer.hr640_gui.Hr640Gui'
        connect:
            hrconnectlogic: 'hrlogic'
