#  Example Qudi configuration file.
#
#
#
# IMPORTANT: The format of every 'module.Class' line has changed on 28.6.2015.
# =========  The class name now needs to be explicitly given here in the config.
#		  the config line must the form package.module.Class.ClassName

global:
    # list of modules to load when starting
    startup: ['man', 'tray']

    ## For controlling the appearance of the GUI:
    stylesheet: 'qdark.qss'

hardware:
    picam:
        module.Class: 'camera.princeton.picam.Picam'

logic:
    ccdlogic:
        module.Class: 'ccd_logic.CCDLogic'
        connect:
            simpledata: 'picam'

gui:
    tray:
        module.Class: 'trayicon.TrayIcon'

    man:
        module.Class: 'manager.managergui.ManagerGui'

    ccdgui:
        module.Class: 'ccd.ccd_gui.CCDGui'
        connect:
            ccdd: 'ccdlogic'
