#  qudi configuration file for i300 spectrometer
#
# IMPORTANT: The format of every 'module.Class' line has changed on 28.6.2015.
# =========  The class name now needs to be explicitly given here in the config.
#		  the config line must the form package.module.Class.ClassName

global:
    # list of modules to load when starting
    startup: ['man', 'tray']

    ## For controlling the appearance of the GUI:
    stylesheet: 'qdark.qss'

hardware:
    i300spectrometer:
        module.Class: 'spectrometer.i300_spectrometer.I300'
        com_port_i300: 'ASRL1::INSTR'


gui:
    tray:
        module.Class: 'trayicon.TrayIcon'

    man:
        module.Class: 'manager.managergui.ManagerGui'