#  qudi configuration file for i300 spectrometer
#
# IMPORTANT: The format of every 'module.Class' line has changed on 28.6.2015.
# =========  The class name now needs to be explicitly given here in the config.
#		  the config line must the form package.module.Class.ClassName

global:
    # list of modules to load when starting
    startup: ['man', 'tray']

    ## For controlling the appearance of the GUI:
    stylesheet: 'qdark.qss'

hardware:
    picam:
        module.Class: 'camera.princeton.picam.Picam'

    i300spectrometer:
        module.Class: 'spectrometer.i300_spectrometer.I300'
        com_port_i300: 'ASRL1::INSTR'

logic:
    ccdlogic:
        module.Class: 'ccd_logic.CCDLogic'
        connect:
            simpledata: 'picam'
            monochromator: 'i300logic'
            savelogic: 'savelogic'

    i300logic:
        module.Class: 'i300_logic.I300Logic'
        connect:
            hardware: 'i300spectrometer'

    savelogic:
        module.Class: 'save_logic.SaveLogic'
        win_data_directory: 'D:\\Polimeni\\Oct 2019\\'
        unix_data_directory: 'Data/'
        log_into_daily_directory: True

gui:
    i300gui:
        module.Class: 'spectrometer.i300_gui.I300Gui'
        connect:
            i300connectlogic: 'i300logic'

    ccdgui:
        module.Class: 'ccd.ccd_gui.CCDGui'
        connect:
            ccdlogic: 'ccdlogic'

    tray:
        module.Class: 'trayicon.TrayIcon'

    man:
        module.Class: 'manager.managergui.ManagerGui'