#  qudi configuration file for i300 spectrometer
#
# IMPORTANT: The format of every 'module.Class' line has changed on 28.6.2015.
# =========  The class name now needs to be explicitly given here in the config.
#		  the config line must the form package.module.Class.ClassName

global:
    # list of modules to load when starting
    startup: ['man', 'tray']

    ## For controlling the appearance of the GUI:
    stylesheet: 'qdark.qss'

logic:
    ccdlogic:
        module.Class: 'ccd_logic.CCDLogic'
        connect:
            savelogic: 'savelogic'

    savelogic:
        module.Class: 'save_logic.SaveLogic'
        win_data_directory: 'C:\\qudi_tests\\'
        unix_data_directory: 'Data/'
        log_into_daily_directory: True

gui:
    ccdgui:
        module.Class: 'ccd.ccd_gui.CCDGui'
        connect:
            ccdlogic: 'ccdlogic'

    tray:
        module.Class: 'trayicon.TrayIcon'

    man:
        module.Class: 'manager.managergui.ManagerGui'