#  Example Qudi configuration file.
#
#
#
# IMPORTANT: The format of every 'module.Class' line has changed on 28.6.2015.
# =========  The class name now needs to be explicitly given here in the config.
#		  the config line must the form package.module.Class.ClassName

global:
    # list of modules to load when starting
    startup: ['man', 'tray']

    ## For controlling the appearance of the GUI:
    stylesheet: 'qdark.qss'

hardware:
    standamotor:
        module.Class: 'motor.standa.standa.MotorStanda'
        ximc_path: 'C:\\Users\\Eight\\PycharmProjects\\standa\\ximc-2.10.5\\ximc\\win64'
        axis_label: 'phi'

gui:
    tray:
        module.Class: 'trayicon.TrayIcon'

    man:
        module.Class: 'manager.managergui.ManagerGui'